WorkflowBuilder(Version=2.9.0)
ExternalizedMapping(ResponseType(Category="Experiment Control"))
-> ModifiedGoNoGoTask.ExperimentControl(NumberOfTrials=500, PercentageGoTrials=100, PercentageCatchTrials=20, ResponseType=true)
-> PropertyMapping(ExperimentControl) => #2
ExternalizedMapping
  LowerBoundDuration(Category="ITI Duration (sec)")
  UpperBoundDuration(Category="ITI Duration (sec)")
  LowerBoundPenaltyDuration(Category="Penalty Duration (sec)")
  UpperBoundPenaltyDuration(Category="Penalty Duration (sec)")
-> ModifiedGoNoGoTask.ItiDuration(LowerBoundDuration=5, UpperBoundDuration=7, LowerBoundPenaltyDuration=2, UpperBoundPenaltyDuration=4)
-> PropertyMapping(ItiDuration) => #5
ExternalizedMapping => #6
  ItiLowerThreshold(Category="Joystick Parameters")
  ItiUpperThreshold(Category="Joystick Parameters")
  JoystickThreshold(Category="Joystick Parameters")
  PullThreshold(Category="Joystick Parameters")
Annotation "NoGoThreshold not used"(Text="") => #7
#6, #7 -> ModifiedGoNoGoTask.JoystickParameters(ItiLowerThreshold=-5, ItiUpperThreshold=0.3, JoystickThreshold=0.3, NoGoThreshold=0, PullThreshold=-0.02)
-> PropertyMapping(JoystickParameters) => #9
ExternalizedMapping(GoResponseWindow(Category="Response Window Settings (secs)"), NoGoResponseWindow(Category="Response Window Settings (secs)"))
-> ModifiedGoNoGoTask.ResponseWindowSettings(GoResponseWindow=1, NoGoResponseWindow=1)
-> PropertyMapping(ResponseWindowSettings) => #12
ExternalizedMapping(PulsePeriod(Category="Solenoid Properties (ms)"))
-> ModifiedGoNoGoTask.SolenoidProperties(PulsePeriod=10)
-> PropertyMapping(SolenoidProperties) => #15
ExternalizedMapping(PullTimeout(Category="Timeout Properties (sec)"), ResponseTimeout(Category="Timeout Properties (sec)"))
-> ModifiedGoNoGoTask.TimeoutProperties(PullTimeout=10, ResponseTimeout=10)
-> PropertyMapping(TimeoutProperties) => #18
ExternalizedMapping(GoSound(Category="Tone Properties"), MissTone(Category="Tone Properties"), NoGoSound(Category="Tone Properties")) => #19
Annotation "RewardTone not used"(Text="") => #20
#19, #20 -> ModifiedGoNoGoTask.ToneProperties(GoSound=29, MissTone=31, NoGoSound=30, RewardTone=29)
-> PropertyMapping(ToneProperties) => #22
#2, #5, #9, #12, #15, #18, #22 -> ModifiedGoNoGoTask.ModifiedGoNoGoTask
-> BehaviorSubject TaskParameters
-> PropertyMapping => #25
  "Lower Bound ITI Duration "(Selector=ItiDuration.LowerBoundDuration)
  "Upper Bound ITI Duration"(Selector=ItiDuration.UpperBoundDuration)
  "Lower Bound Penalty Duration"(Selector=ItiDuration.LowerBoundPenaltyDuration)
  "Upper Bound Penalty Duration"(Selector=ItiDuration.UpperBoundPenaltyDuration)
  "ITI Lower Threshold"(Selector=JoystickParameters.ItiLowerThreshold)
  "ITI Upper Threshold"(Selector=JoystickParameters.ItiUpperThreshold)
  "Pull Threshold"(Selector=JoystickParameters.PullThreshold)
  "Go Response Window (s)"(Selector=ResponseWindowSettings.GoResponseWindow)
  "NoGo Response Window (s)"(Selector=ResponseWindowSettings.NoGoResponseWindow)
  "Pulse Period(ms)"(Selector=SolenoidProperties.PulsePeriod)
  "Pull Timeout"(Selector=TimeoutProperties.PullTimeout)
  "Response Timeout"(Selector=TimeoutProperties.ResponseTimeout)
  GoSound(Selector=ToneProperties.GoSound)
  MissTone(Selector=ToneProperties.MissTone)
  NoGoSound(Selector=ToneProperties.NoGoSound)
  "Joystick Threshold"(Selector=JoystickParameters.JoystickThreshold)
  ResponseType(Selector=ExperimentControl.ResponseType)
ExternalizedMapping("Behavior COMPort", "Soundcard COMPort", NumberOfGoTrials, NumberOfNoGoTrials, NumberOfCatchTrials) => #26
Annotation "Do not change settings here!"(Text="") => #27
#25, #26, #27 -> GroupWorkflow TwoToneExperiment
    Annotation "Setup Subjects"(Text="")

    IntProperty(Value=-1)
    -> Disable IgnoreElements
    -> BehaviorSubject Trial

    PropertySource<StateTransition,StateId>(MemberName=Id, Value=ITI)
    -> IgnoreElements
    -> BehaviorSubject State

    Annotation "Pseudorandom List Subjects"(Text="")

    ExternalizedMapping(Value(DisplayName=NumberOfGoTrials, Category="Pseudorandom List"))
    -> IntProperty(Value=5)
    -> Take(Count=1)
    -> AsyncSubject NumberOfGoTrials

    ExternalizedMapping(Value(DisplayName=NumberOfNoGoTrials, Category="Pseudorandom List"))
    -> IntProperty(Value=3)
    -> Take(Count=1)
    -> AsyncSubject NumberOfNoGoTrials

    ExternalizedMapping(Value(DisplayName=NumberOfCatchTrials, Category="Pseudorandom List"))
    -> IntProperty(Value=3)
    -> Take(Count=1)
    -> AsyncSubject NumberOfCatchTrials

    SubscribeSubject NumberOfCatchTrials => #20
    SubscribeSubject NumberOfGoTrials => #21
    SubscribeSubject NumberOfNoGoTrials => #22
    #20, #21, #22 -> Zip
    -> Add
    -> Take(Count=1)
    -> AsyncSubject NumberOfTrials

    SubscribeSubject NumberOfGoTrials => #27
    SubscribeSubject NumberOfNoGoTrials => #28
    #27, #28 -> Zip
    -> Add
    -> Take(Count=1)
    -> AsyncSubject NumberOfGoNoGoTrials

    SubscribeSubject NumberOfGoNoGoTrials
    -> Add(Operand=IntProperty(Value=1))
    -> PropertyMapping(Count) => #35
    SubscribeSubject NumberOfNoGoTrials
    -> Negate
    -> PropertyMapping(Start) => #38
    #35, #38 -> Range(Start=-3, Count=9)
    -> Condition => #40
        WorkflowInput Source1
        -> NotEqual(Operand=IntProperty(Value=0))
        -> WorkflowOutput
    Timer(DueTime=PT0S)
    -> IntProperty(Value=0) => #42
    SubscribeSubject NumberOfCatchTrials
    -> PropertyMapping(Count) => #44
    #42, #44 -> RepeatCount(Count=1) => #45
    #40, #45 -> Merge
    -> Bonsai.Numerics.Permutation
    -> ToArray
    -> Take(Count=1)
    -> AsyncSubject TrialDistribution

    ExternalizedMapping("Joystick Threshold"(Category="Joystick Parameters"))
    -> GroupWorkflow JoystickResponse => #52
        SubscribeSubject Joystick => #0
        ExternalizedMapping(Value(DisplayName="Joystick Threshold", Category="Joystick Properties"))
        -> FloatProperty(Value=0.3)
        -> BehaviorSubject JoystickThreshold => #3
        #0, #3 -> CombineLatest
        -> GreaterThan
        -> DistinctUntilChanged
        -> Condition Movement
            WorkflowInput Source1
            -> WorkflowOutput
        -> WorkflowOutput
    ExternalizedMapping(Value(DisplayName=ResponseType, Description="False=Lick True=Joystick", Category="Experiment Control"))
    -> BooleanProperty(Value=true) => #54
    -> Condition => #55
        WorkflowInput Source1
        -> WorkflowOutput
    #52, #55 -> SubscribeWhen => #56
    SubscribeSubject Lick
    -> MemberSelector(Selector=Value) => #58
    #54 -> Condition => #59
        WorkflowInput Source1
        -> BitwiseNot
        -> WorkflowOutput
    #58, #59 -> SubscribeWhen => #60
    #56, #60 -> Merge
    -> PropertySource<StateTransition,StateId>(MemberName=Id, Value=Joystick)
    -> PublishSubject Threshold

    SubscribeSubject PreviousResponse
    -> DelaySubscription(DueTime=PT0.001S) => #65
    ExternalizedMapping => #66
      MissTone
      "Lower Bound ITI Duration "
      "Upper Bound ITI Duration"
      "Lower Bound Penalty Duration"
      "Upper Bound Penalty Duration"
      "Go Response Window (s)"
      "NoGo Response Window (s)"
      GoSound
      NoGoSound
      "Pulse Period(ms)"
      "Timeout Duration"(DisplayName="Response Timeout", Category="Timeout Properties")
      "Pull Timeout"(DisplayName="Pull Timeout", Category="Timeout Properties")
    #65, #66 -> CreateObservable CreateTrial => #67
        SubscribeSubject TrialDistribution
        -> Disable Bonsai.Numerics.Distributions.Sample => #1
        SubscribeSubject Trial
        -> PropertyMapping(Value) => #3
        #1, #3 -> Index(Operand=IntProperty(Value=0))
        -> Sink
            SubscribeSubject Trial
            -> Add(Operand=IntProperty(Value=1))
            -> Take(Count=1)
            -> MulticastSubject Trial
        -> IncludeWorkflow(Path=Extensions\LogState.bonsai, Id=ITI) => #6
        SubscribeSubject Random => #7
        ExternalizedMapping => #8
          Lower(DisplayName="Lower Bound ITI Duration ", Category="ITI Duration (sec)")
          Upper(DisplayName="Upper Bound ITI Duration", Category="ITI Duration (sec)")
        #7, #8 -> Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=5, Upper=7)
        -> Bonsai.Numerics.Distributions.Sample
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: TimeSpan.FromSeconds(it)
        -> PropertyMapping(DueTime) => #12
        #6, #12 -> Delay(DueTime=PT5.494S) => #13
        SubscribeSubject PenaltyThreshold => #14
        SubscribeSubject Random => #15
        ExternalizedMapping => #16
          Lower(DisplayName="Lower Bound Penalty Duration", Category="Penalty Duration (sec)")
          Upper(DisplayName="Upper Bound Penalty Duration", Category="Penalty Duration (sec)")
        #15, #16 -> Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=2, Upper=4)
        -> Bonsai.Numerics.Distributions.Sample
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: TimeSpan.FromSeconds(it)
        -> PropertyMapping(DueTime) => #20
        #14, #20 -> GroupWorkflow DummyInitialValue => #21
            DoubleProperty(Value=0)
            -> First => #1
            -> BooleanProperty(Value=true) => #2
            WorkflowInput Source1 => #3
            -> BooleanProperty(Value=true) => #4
            #2, #4 -> Concat => #5
            ExternalizedMapping(DueTime) => #6
            #5, #6 -> Throttle(DueTime=PT2.345S) => #7
            #3 -> BooleanProperty(Value=false) => #8
            #1 -> BooleanProperty(Value=false) => #9
            #7, #8, #9 -> Merge
            -> WorkflowOutput
        #13, #21 -> CombineLatest
        -> Disable Condition ReadyToGo
            WorkflowInput Source1
            -> MemberSelector(Selector=Item2)
            -> WorkflowOutput
        -> Take(Count=1)
        -> MemberSelector(Selector=Item1) => #25
        -> Condition FilterOutZero => #26
            WorkflowInput Source1
            -> NotEqual(Operand=IntProperty(Value=0))
            -> WorkflowOutput
        Disable ExternalizedMapping(Value(DisplayName="Percentage Go Trials")) => #27
        #26, #27 -> Disable LessThanOrEqual(Operand=IntProperty(Value=100))
        -> GreaterThan(Operand=IntProperty(Value=0)) => #29
        -> Condition GoTrial
            WorkflowInput Source1
            -> WorkflowOutput
        -> Disable Condition NotCatchTrial
            SubscribeSubject CatchTrial
            -> Equal(Operand=BooleanProperty(Value=false))
            -> WorkflowOutput
        -> Disable SelectMany
            Bonsai.Numerics.Distributions.CreateDiscreteUniform(Lower=0, Upper=100)
            -> Bonsai.Numerics.Distributions.Sample
            -> GreaterThan(Operand=IntProperty(Value=0)) => #2
            -> Condition PulseOn
                WorkflowInput Source1
                -> WorkflowOutput
            -> GroupWorkflow
                WorkflowInput Source1
                -> Bonsai.Harp.CF.BehaviorCommand(Type=StartPwm, Mask=Digital1)
                -> MulticastSubject Commands
                -> Delay(DueTime=PT0.05S)
                -> Bonsai.Harp.CF.BehaviorCommand(Type=StopPwm, Mask=Digital1)
                -> MulticastSubject Commands
                -> IncludeWorkflow(Path=Extensions\LogState.bonsai, Id=Blink)
                -> Disable RepeatCount(Count=1)
                -> WorkflowOutput
            -> IncludeWorkflow(Path=Extensions\LogState.bonsai, Id=Blink) => #5
            #2 -> Condition NoPulse
                WorkflowInput Source1
                -> BitwiseNot
                -> WorkflowOutput
            -> IncludeWorkflow(Path=Extensions\ClearOutput.bonsai, Mask=Digital0) => #7
            #5, #7 -> Merge
            -> WorkflowOutput
        -> Disable IncludeWorkflow(Path=Extensions\LogState.bonsai, Id=Go)
        -> Disable IncludeWorkflow(Path=Extensions\SetOutput.bonsai, Mask=Digital0) => #34
        Disable ExternalizedMapping(Value(DisplayName="Response Delay (ms)", Category="Response Window Settings"))
        -> Disable DoubleProperty(Value=0)
        -> Disable Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: TimeSpan.FromMilliseconds(it)
        -> Disable PropertyMapping(DueTime) => #38
        ExternalizedMapping(GoSound(Category="Tone Properties")) => #39
        Source1=#34, Source1=#38, Source3=#39 -> SelectMany StimulusPresentation
            SubscribeSubject Threshold
            -> TrialResponse(Response=EarlyResponse)
            -> IncludeWorkflow(Path=Extensions\LogState.bonsai, Id=EarlyResponse)
            -> BooleanProperty(Value=false) => #3
            ExternalizedMapping(DueTime(DisplayName="Early Response Penalty")) => #4
            #3, #4 -> Delay(DueTime=PT0S) => #5
            WorkflowInput Source1
            -> PublishSubject LaserOn
            -> IncludeWorkflow(Path=Extensions\LogState.bonsai, Id=Go) => #8
            ExternalizedMapping(SoundIndex(DisplayName=GoSound)) => #9
            #8, #9 -> IncludeWorkflow(Path=Extensions\PlaySound.bonsai, SoundIndex=29)
            -> MulticastSubject AllToneTick
            -> Disable Delay(DueTime=PT0.1S) => #12
            ExternalizedMapping(DueTime) => #13
            #12, #13 -> Delay(DueTime=PT0S)
            -> BooleanProperty(Value=true) => #15
            #15, #3 -> TakeUntil => #16
            #5, #16 -> Merge
            -> First
            -> WorkflowOutput
        -> Condition CompletedStimulus
            WorkflowInput Source1
            -> WorkflowOutput
        -> IncludeWorkflow(Path=Extensions\LogState.bonsai, Id=Go)
        -> Disable IncludeWorkflow(Path=Extensions\ClearOutput.bonsai, Mask=Digital0) => #43
        ExternalizedMapping(Value(DisplayName="Go Response Window (s)", Category="Response Window Settings"))
        -> FloatProperty(Value=1)
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: TimeSpan.FromSeconds(it)
        -> PropertyMapping("Go Response Window (s)") => #47
        ExternalizedMapping(Value(DisplayName="Pull Timeout", Category="Response Window Settings"))
        -> FloatProperty(Value=10)
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: TimeSpan.FromSeconds(it)
        -> PropertyMapping(DueTime) => #51
        #43, #47, #51 -> SelectMany Move => #52
            SubscribeSubject PullThreshold
            -> IntProperty(Value=0)
            -> IncludeWorkflow(Path=Extensions\LogState.bonsai, Id=Timeout) => #2
            ExternalizedMapping(DueTime) => #3
            #2, #3 -> Delay(DueTime=PT10S) => #4
            SubscribeSubject Threshold
            -> IntProperty(Value=1) => #6
            #6, #2 -> TakeUntil => #7
            ExternalizedMapping(DueTime(DisplayName="Go Response Window (s)"))
            -> Timer(DueTime=PT1S)
            -> IntProperty(Value=2) => #10
            #10, #2 -> TakeUntil => #11
            #4, #7, #11 -> Merge
            -> First
            -> WorkflowOutput
        -> Condition Hit => #53
            WorkflowInput Source1
            -> Equal(Operand=IntProperty(Value=1))
            -> WorkflowOutput
        ExternalizedMapping("Pulse Period(ms)") => #54
        #53, #54 -> GroupWorkflow Reward
            WorkflowInput Source1 => #0
            ExternalizedMapping("Pulse Period(ms)"(Category="Solenoid Properties")) => #1
            #0, #1 -> GroupWorkflow A => #2
                WorkflowInput Source1 => #0
                ExternalizedMapping(Value(DisplayName="Pulse Period(ms)")) => #1
                #0, #1 -> IntProperty(Value=10)
                -> Bonsai.Harp.CF.BehaviorCommand(Type=PulsePeriod, Mask=Poke0Valve)
                -> MulticastSubject Commands
                -> Bonsai.Harp.CF.BehaviorCommand(Type=SetOutput, Mask=Poke0Valve)
                -> MulticastSubject Commands
                -> WorkflowOutput
            ExternalizedMapping(SoundIndex(DisplayName=RewardTone, Category="Tone Properties")) => #3
            #2, #3 -> IncludeWorkflow(Path=Extensions\PlaySound.bonsai, SoundIndex=31)
            -> WorkflowOutput
        -> TrialResponse(Response=Hit)
        -> IncludeWorkflow(Path=Extensions\LogState.bonsai, Id=Hit) => #57
        #52 -> Condition Miss
            WorkflowInput Source1
            -> Equal(Operand=IntProperty(Value=2))
            -> WorkflowOutput
        -> TrialResponse(Response=Miss)
        -> IncludeWorkflow(Path=Extensions\LogState.bonsai, Id=Miss) => #60
        #29 -> Condition NoGoTrial
            WorkflowInput Source1
            -> BitwiseNot
            -> WorkflowOutput
        -> Disable Condition NotCatchTrial
            SubscribeSubject CatchTrial
            -> Equal(Operand=BooleanProperty(Value=false))
            -> WorkflowOutput
        -> AsyncSubject NoGo
        -> Disable IncludeWorkflow(Path=Extensions\LogState.bonsai, Id=NoGo)
        -> Disable IncludeWorkflow(Path=Extensions\SetOutput.bonsai, Mask=Digital1) => #65
        ExternalizedMapping(NoGoSound(Category="Tone Properties")) => #66
        Source1=#38, Source1=#65, Source3=#66 -> SelectMany StimulusPresentation
            SubscribeSubject Threshold
            -> TrialResponse(Response=EarlyResponse)
            -> IncludeWorkflow(Path=Extensions\LogState.bonsai, Id=EarlyResponse)
            -> BooleanProperty(Value=false) => #3
            ExternalizedMapping(SoundIndex(DisplayName=NoGoSound)) => #4
            WorkflowInput Source1
            -> PublishSubject LaserOn => #6
            #4, #6 -> IncludeWorkflow(Path=Extensions\PlaySound.bonsai, SoundIndex=30)
            -> MulticastSubject AllToneTick
            -> Disable Delay(DueTime=PT0.1S) => #9
            ExternalizedMapping(DueTime) => #10
            #9, #10 -> Delay(DueTime=PT0S)
            -> BooleanProperty(Value=true) => #12
            #3, #12 -> Merge
            -> First
            -> WorkflowOutput
        -> Condition CompletedStimulus
            WorkflowInput Source1
            -> WorkflowOutput
        -> IncludeWorkflow(Path=Extensions\LogState.bonsai, Id=NoGo)
        -> Disable IncludeWorkflow(Path=Extensions\ClearOutput.bonsai, Mask=Digital1) => #70
        ExternalizedMapping(Value(DisplayName="NoGo Response Window (s)", Category="Response Window Settings"))
        -> FloatProperty(Value=1)
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: TimeSpan.FromSeconds(it)
        -> PropertyMapping("NoGo Response Window (s)") => #74
        #70, #74 -> SelectMany DontMove => #75
            SubscribeSubject NoGoThreshold
            -> DistinctUntilChanged
            -> PropertySource<StateTransition,StateId>(MemberName=Id, Value=Joystick)
            -> IncludeWorkflow Timestamp(Path=Bonsai.Harp:WithLatestTimestamp.bonsai)
            -> BooleanProperty(Value=false) => #4
            ExternalizedMapping(DueTime(DisplayName="NoGo Response Window (s)"))
            -> Timer(DueTime=PT1S)
            -> BooleanProperty(Value=true) => #7
            #4, #7 -> Merge
            -> First
            -> WorkflowOutput
        -> Condition CorrectRejection
            WorkflowInput Source1
            -> WorkflowOutput
        -> TrialResponse(Response=CorrectRejection)
        -> IncludeWorkflow(Path=Extensions\LogState.bonsai, Id=CorrectRejection) => #78
        #75 -> Condition FalseAlarm
            WorkflowInput Source1
            -> BitwiseNot
            -> WorkflowOutput
        -> IncludeWorkflow(Path=Extensions\LogState.bonsai, Id=Timeout) => #80
        ExternalizedMapping(MissTone, "Timeout Duration") => #81
        #80, #81 -> GroupWorkflow Penalty
            WorkflowInput Source1 => #0
            ExternalizedMapping(SoundIndex(DisplayName=MissTone, Category="Tone Properties")) => #1
            #0, #1 -> IncludeWorkflow(Path=Extensions\PlaySound.bonsai, SoundIndex=31) => #2
            ExternalizedMapping(Value(DisplayName="Timeout Duration", Category="Timeout Properties"))
            -> FloatProperty(Value=10)
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: TimeSpan.FromSeconds(it)
            -> PropertyMapping(DueTime) => #6
            #2, #6 -> SelectMany FalseAlarmPenalty
                WorkflowInput Source1 => #0
                ExternalizedMapping(DueTime) => #1
                #0, #1 -> Delay(DueTime=PT10S)
                -> WorkflowOutput
            -> WorkflowOutput
        -> TrialResponse(Response=FalseAlarm)
        -> IncludeWorkflow(Path=Extensions\LogState.bonsai, Id=FalseAlarm) => #84
        #52 -> Condition PullPenalty
            WorkflowInput Source1
            -> Equal(Operand=IntProperty(Value=0))
            -> WorkflowOutput
        -> TrialResponse(Response=PullPenalty)
        -> IncludeWorkflow(Path=Extensions\LogState.bonsai, Id=PullPenalty) => #87
        #25 -> Condition CatchZero
            WorkflowInput Source1
            -> Equal(Operand=IntProperty(Value=0))
            -> WorkflowOutput
        -> Disable Condition CatchTrial
            SubscribeSubject CatchTrial
            -> WorkflowOutput
        -> SelectMany StimulusPresentation
            WorkflowInput Source1
            -> PublishSubject LaserOn
            -> Disable IncludeWorkflow(Path=Extensions\LogState.bonsai, Id=Go) => #2
            ExternalizedMapping(SoundIndex(DisplayName=CatchTrialSound)) => #3
            #2, #3 -> IncludeWorkflow(Path=Extensions\PlaySound.bonsai, SoundIndex=50)
            -> MulticastSubject AllToneTick
            -> Disable Delay(DueTime=PT0.1S) => #6
            ExternalizedMapping(DueTime) => #7
            #6, #7 -> Delay(DueTime=PT0S)
            -> BooleanProperty(Value=true)
            -> First
            -> WorkflowOutput
        -> IncludeWorkflow(Path=Extensions\LogState.bonsai, Id=CatchTrial)
        -> SelectMany Move => #92
            SubscribeSubject PullThreshold
            -> IntProperty(Value=0)
            -> IncludeWorkflow(Path=Extensions\LogState.bonsai, Id=Timeout) => #2
            ExternalizedMapping(DueTime) => #3
            #2, #3 -> Delay(DueTime=PT0.5S) => #4
            SubscribeSubject Threshold
            -> IntProperty(Value=1) => #6
            #6, #2 -> TakeUntil => #7
            ExternalizedMapping(DueTime(DisplayName="Go Response Window (s)"))
            -> Timer(DueTime=PT1S)
            -> IntProperty(Value=2) => #10
            #10, #2 -> TakeUntil => #11
            #4, #7, #11 -> Merge
            -> First
            -> WorkflowOutput
        -> Condition Hit
            WorkflowInput Source1
            -> Equal(Operand=IntProperty(Value=1))
            -> WorkflowOutput
        -> TrialResponse(Response=CatchHit)
        -> IncludeWorkflow(Path=Extensions\LogState.bonsai, Id=CatchHit) => #95
        #92 -> Condition Miss
            WorkflowInput Source1
            -> Equal(Operand=IntProperty(Value=2))
            -> WorkflowOutput
        -> TrialResponse(Response=CatchMiss)
        -> IncludeWorkflow(Path=Extensions\LogState.bonsai, Id=CatchMiss) => #98
        #57, #60, #78, #84, #87, #95, #98 -> Merge
        -> FirstOrDefault
        -> WorkflowOutput

        Disable SubscribeSubject Random
        -> Disable Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=0, Upper=100)
        -> Disable Bonsai.Numerics.Distributions.Sample => #104
        Disable ExternalizedMapping(Value(DisplayName="Percentage Catch Trials")) => #105
        #104, #105 -> Disable LessThan(Operand=DoubleProperty(Value=20))
        -> Disable AsyncSubject CatchTrial

        WorkflowInput Source1

        SubscribeSubject Joystick => #109
        SubscribeSubject NoGo => #110
        #109, #110 -> SubscribeWhen => #111
        -> Take(Count=1) => #112
        #111, #112 -> CombineLatest
        -> Subtract
        -> Bonsai.Numerics.Abs => #115
        ExternalizedMapping(Value(DisplayName="NoGo Threshold")) => #116
        #115, #116 -> GreaterThan(Operand=DoubleProperty(Value=0.2))
        -> Condition Movement
            WorkflowInput Source1
            -> WorkflowOutput
        -> PublishSubject NoGoThreshold
    Disable SubscribeSubject StartTrigger => #68
    #67, #68 -> Disable SubscribeWhen => #69
    SubscribeSubject NumberOfTrials
    -> PropertyMapping(Count) => #71
    #69, #71 -> Take(Count=500)
    -> Concat
    -> MulticastSubject PreviousResponse
    -> PublishSubject ResponseStatistics => #75
    SubscribeSubject Path
    -> Add(Operand=StringProperty(Value=/ResponseStat.csv))
    -> PropertyMapping(FileName) => #78
    #75, #78 -> Bonsai.IO.CsvWriter
      FileName=C:\Users\sippylab\Desktop\Data\Go_NoGo/MTH/GoTone_Phase_D4/MTH064_GoTone_Phase_D4_2026-02-05T16-03-51/ResponseStat.csv
      Append=false
      Overwrite=false
      Suffix=None
      IncludeHeader=true
    -> Disable LastOrDefault
    -> Disable Delay(DueTime=PT1S)
    -> WorkflowOutput

    SubscribeSubject State
    -> IncludeWorkflow Timestamp(Path=Extensions\WithLatestTimestamp.bonsai)
    -> InputMapping(Id(Selector=Value), ElapsedTime(Selector=Timestamp)) => #85
    SubscribeSubject Trial
    -> PropertyMapping(Trial) => #87
    Source1=#85, Source1=#87 -> StateTransition(Trial=271, Id=Joystick, ElapsedTime=6055802.545024) => #88
    -> SampleState
    -> StateStatistics
    -> PublishSubject TrialStatistics
    #88 -> DistinctUntilStateChanged => #92
    SubscribeSubject Path
    -> Add(Operand=StringProperty(Value=/GoTone_StateTransitions.csv))
    -> PropertyMapping(FileName) => #95
    #92, #95 -> Bonsai.IO.CsvWriter
      FileName=C:\Users\sippylab\Desktop\Data\Go_NoGo/MTH/GoTone_Phase_D4/MTH064_GoTone_Phase_D4_2026-02-05T16-03-51/GoTone_StateTransitions.csv
      Append=false
      Overwrite=false
      Suffix=None
      IncludeHeader=true

    SubscribeSubject Threshold
    -> IncludeWorkflow(Path=Extensions\LogState.bonsai, Id=Joystick)

    SubscribeSubject Lick
    -> IncludeWorkflow(Path=Extensions\LogState.bonsai, Id=Lick)

    Disable Bonsai.Numerics.CreateRandom(Seed=nil)
    -> Disable Bonsai.Numerics.Distributions.CreateDiscreteUniform(Lower=0, Upper=100)
    -> Disable AsyncSubject TrialDistribution

    PropertySource<TrialResponse,ResponseId>(MemberName=Result, Value=Hit)
    -> BehaviorSubject PreviousResponse

    SubscribeSubject Sounds
    -> Bonsai.Harp.Parse(Register=Bonsai.Harp.ParseMessagePayload(PayloadType=U16, IsArray=false)) => #107
    SubscribeSubject Path
    -> Add(Operand=StringProperty(Value=/sounds.csv))
    -> PropertyMapping(FileName) => #110
    #107, #110 -> Bonsai.IO.CsvWriter
      FileName=C:\Users\sippylab\Desktop\Data\Go_NoGo/MTH/GoTone_Phase_D4/MTH064_GoTone_Phase_D4_2026-02-05T16-03-51/sounds.csv
      Append=false
      Overwrite=false
      Suffix=None
      IncludeHeader=false

    Disable IncludeWorkflow(Path=Extensions\SoftSoundCard.bonsai)
    Disable IncludeWorkflow(Path=Extensions\ManualCamera.bonsai)
    Disable IncludeWorkflow(Path=Extensions\HarpCamera.bonsai)

    PropertySource<StateTransition,StateId>(MemberName=Id, Value=Annotation)
    -> IgnoreElements
    -> BehaviorSubject Annotation

    SubscribeSubject Joystick => #118
    ExternalizedMapping(Value(DisplayName="ITI Lower Threshold", Category="Joystick Parameters"))
    -> FloatProperty(Value=-5)
    -> BehaviorSubject ITILower => #121
    #118, #121 -> CombineLatest
    -> LessThan => #123
    ExternalizedMapping(Value(DisplayName="ITI Upper Threshold", Category="Joystick Parameters"))
    -> FloatProperty(Value=0.3)
    -> BehaviorSubject ITIUpper => #126
    #118, #126 -> CombineLatest
    -> GreaterThan => #128
    #123, #128 -> Zip
    -> LogicalOr
    -> Condition Movement
        WorkflowInput Source1
        -> WorkflowOutput
    -> PublishSubject PenaltyThreshold

    SubscribeSubject Joystick => #133
    ExternalizedMapping(Value(DisplayName="Pull Threshold", Category="Joystick Parameters")) => #134
    #133, #134 -> LessThan(Operand=DoubleProperty(Value=-0.02))
    -> Condition Movement
        WorkflowInput Source1
        -> WorkflowOutput
    -> PublishSubject PullThreshold

    ExternalizedMapping(PortName(DisplayName="Behavior COMPort", Category="Experiment Control"))
    -> GroupWorkflow HarpJoystick
        SubscribeSubject Commands => #0
        ExternalizedMapping(PortName) => #1
        #0, #1 -> Bonsai.Harp.Device(OperationMode=Active, OperationLed=On, DumpRegisters=true, VisualIndicators=On, Heartbeat=Disabled, IgnoreErrors=false, PortName=COM5) => #2
        -> Bonsai.Harp.Parse(Register=Bonsai.Harp.ParseMessagePayload(PayloadType=Timestamp, IsArray=false))
        -> PublishSubject Timestamp
        #2 -> Bonsai.Harp.CF.BehaviorEvent(Type=QuadratureCounter, Mask=Port2)
        -> PublishSubject Touch
        #2 -> Bonsai.Harp.CF.BehaviorEvent(Type=AnalogInput, Mask=Port1)
        -> PublishSubject Joystick
        #2 -> Bonsai.Harp.CF.BehaviorEvent(Type=Input, Mask=Poke1InfraRedBeam)
        -> PublishSubject Reward
        #2 -> Bonsai.Harp.CF.BehaviorEvent(Type=RegisterInputs, Mask=Port1)
        -> PublishSubject StartTrigger
        #2 -> MemberSelector(Selector=MessageBytes) => #13
        SubscribeSubject Path
        -> Add(Operand=StringProperty(Value=/Joystick.bin))
        -> PropertyMapping(Path) => #16
        #13, #16 -> Bonsai.Dsp.MatrixWriter
          Path=C:\Users\sippylab\Desktop\Data\Go_NoGo/MTH/GoTone_Phase_D4/MTH064_GoTone_Phase_D4_2026-02-05T16-03-51/Joystick.bin
          Suffix=None
          Overwrite=false
          Layout=ColumnMajor

        Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=32, PayloadType=U8, Payload=0)
        -> IgnoreElements
        -> BehaviorSubject Commands

        Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateStopCamerasPayload(StopCameras="CameraOutput0 CameraOutput1"))
        -> MulticastSubject Commands

        SubscribeSubject Touch
        -> Bonsai.Numerics.Abs
        -> GreaterThan(Operand=DoubleProperty(Value=0.015))
        -> DistinctUntilChanged
        -> Condition TouchDetect
            WorkflowInput Source1
            -> WorkflowOutput
        -> IncludeWorkflow Timestamp(Path=Bonsai.Harp:WithLatestTimestamp.bonsai)
        -> PublishSubject Lick

    PropertySource<Bonsai.Harp.Device,System.String>(MemberName=PortName, Value=COM5)

    ExternalizedMapping(PortName(DisplayName="Soundcard COMPort", Category="Experiment Control"))
    -> GroupWorkflow HarpSoundCard
        SubscribeSubject Sounds => #0
        ExternalizedMapping(PortName) => #1
        #0, #1 -> Bonsai.Harp.Device(OperationMode=Active, OperationLed=On, DumpRegisters=true, VisualIndicators=On, Heartbeat=Disabled, IgnoreErrors=false, PortName=COM3)
        -> MemberSelector(Selector=MessageBytes) => #3
        SubscribeSubject Path
        -> Add(Operand=StringProperty(Value=/soundcard.bin))
        -> PropertyMapping(Path) => #6
        #3, #6 -> Bonsai.Dsp.MatrixWriter
          Path=C:\Users\sippylab\Desktop\Data\Go_NoGo/MTH/GoTone_Phase_D4/MTH064_GoTone_Phase_D4_2026-02-05T16-03-51/soundcard.bin
          Suffix=None
          Overwrite=false
          Layout=ColumnMajor

        Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=32, PayloadType=U8, Payload=0)
        -> IgnoreElements
        -> BehaviorSubject Sounds

    BehaviorSubject<Bonsai.Harp.HarpMessage> AllToneTick
    Disable IncludeWorkflow(Path=Extensions\SoftJoystick.bonsai)

    Bonsai.Windows.Input.KeyDown(Filter="LButton ShiftKey ControlKey Space Prior PageUp D0 D1 Shift", SuppressRepetitions=false)
    -> GroupWorkflow PulseValve
        WorkflowInput Source1 => #0
        ExternalizedMapping(Value(DisplayName="Pulse Period(ms)")) => #1
        #0, #1 -> IntProperty(Value=20)
        -> Bonsai.Harp.CF.BehaviorCommand(Type=PulsePeriod, Mask=Poke0Valve)
        -> MulticastSubject Commands
        -> Bonsai.Harp.CF.BehaviorCommand(Type=SetOutput, Mask=Poke0Valve)
        -> MulticastSubject Commands
        -> WorkflowOutput
    -> IncludeWorkflow(Path=Extensions\LogState.bonsai, Id=Annotation)

Disable GroupWorkflow CameraVisualizer
    SubscribeSubject Camera => #0
    ExternalizedMapping(Value(DisplayName=VisualizerFramerate))
    -> FloatProperty(Value=20)
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: TimeSpan.FromSeconds(1/it)
    -> PropertyMapping(Interval) => #4
    #0, #4 -> GateInterval(Interval=PT0.05S)
    -> WorkflowOutput

Disable ExternalizedMapping(Index(DisplayName="Camera Index", Category="Camera Settings"))
-> Disable Bonsai.Vision.CameraCapture(Index=0, CaptureProperties="") => #31
Disable ExternalizedMapping(FileName(DisplayName="Video File Name", Category="Camera Settings")) => #32
#31, #32 -> Disable Bonsai.Vision.VideoWriter
  FileName=RawVideo
  Suffix=Timestamp
  Buffered=true
  Overwrite=false
  FourCC=FMP4
  FrameRate=30
  FrameSize(Width=0, Height=0)
  ResizeInterpolation=NearestNeighbor

SubscribeSubject Joystick => #34
-> Visualizer
    WorkflowInput Source1
    -> WorkflowOutput
SubscribeSubject Timestamp => #36
#36, #34 -> CombineLatest => #37
SubscribeSubject Path
-> Add(Operand=StringProperty(Value=/JoystickTrace.csv))
-> PropertyMapping(FileName) => #40
#37, #40 -> Bonsai.IO.CsvWriter
  FileName=C:\Users\sippylab\Desktop\Data\Go_NoGo/MTH/GoTone_Phase_D4/MTH064_GoTone_Phase_D4_2026-02-05T16-03-51/JoystickTrace.csv
  Append=false
  Overwrite=false
  Suffix=None
  IncludeHeader=false

Disable SubscribeSubject Path
-> Disable Add(Operand=StringProperty(Value=\Weight.csv))
-> Disable PropertyMapping(FileName) => #44
Disable ExternalizedMapping(Value(DisplayName=StartingWeight))
-> Disable FloatProperty(Value=31) => #46
Disable ExternalizedMapping(Value(DisplayName=Weight))
-> Disable FloatProperty(Value=23.6) => #48
#46, #48 -> Disable CombineLatest => #49
#44, #49 -> Disable Bonsai.IO.CsvWriter
  FileName=C:\Users\SippylabJan\Desktop\BehaviorData\GoNoGoTask/JK103/Pretraining_2022-08-24T11-09-41\Weight.csv
  Append=false
  Overwrite=false
  Suffix=Timestamp
  IncludeHeader=false

Disable Timer(DueTime=PT0S) => #51
Disable ExternalizedMapping(Camera0Frequency(Category="Camera Settings")) => #52
#51, #52 -> Disable Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateCamera0FrequencyPayload(Camera0Frequency=30))
-> Disable MulticastSubject Commands
-> Disable Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateStartCamerasPayload(StartCameras=CameraOutput0))
-> Disable MulticastSubject Commands

ExternalizedMapping(SerialNumber0, VideoFrameRate0, FrameSize0, SerialNumber1, VideoFrameRate1, FrameSize1, TriggerFrameRate1, TriggerFrameRate0) => #57
Annotation "Spinnaker camera settings"(Text="") => #58
#57, #58 -> GroupWorkflow "Two Cameras"
    ExternalizedMapping(SerialNumber(DisplayName=SerialNumber0, Category="Camera0 Settings"))
    -> Bonsai.Spinnaker.SpinnakerCapture(Index=20276339, SerialNumber=20276339, ColorProcessing=Default) => #1
    -> IncludeWorkflow Timestamp(Path=Extensions\WithLatestTimestamp.bonsai)
    -> MemberSelector(Selector=Timestamp) => #3
    SubscribeSubject Path
    -> Add(Operand=StringProperty(Value=/Timestamp_Camera0_pupil_facial.csv))
    -> PropertyMapping(FileName) => #6
    #3, #6 -> Disable Bonsai.IO.CsvWriter
      FileName=C:\Users\sippylab\Desktop\Data\Go_NoGo/MTH/GoTone_Phase_D3/MTH054_GoTone_Phase_D3_2026-02-04T11-04-40/Timestamp_Camera0_pupil_facial.csv
      Append=false
      Overwrite=false
      Suffix=None
      IncludeHeader=true
    SubscribeSubject Path
    -> Add(Operand=StringProperty(Value=/Camera0_pupil_facial.csv))
    -> PropertyMapping(FileName) => #10
    #1, #10 -> Disable Bonsai.IO.CsvWriter
      FileName=C:\Users\sippylab\Desktop\Data\Go_NoGo/MTH/GoTone_Phase_D3/MTH054_GoTone_Phase_D3_2026-02-04T11-04-40/Camera0_pupil_facial.csv
      Append=false
      Overwrite=false
      Suffix=None
      IncludeHeader=true
      Selector="ChunkData.FrameID,ChunkData.Timestamp"
    -> MemberSelector(Selector=Image)
    -> PublishSubject Video0 => #13
    SubscribeSubject Path
    -> Add(Operand=StringProperty(Value=/Camera0_pupil_facial_.avi))
    -> PropertyMapping(FileName) => #16
    ExternalizedMapping(FrameRate(DisplayName=VideoFrameRate0, Category="Camera0 Settings")) => #17
    ExternalizedMapping(FrameSize(DisplayName=FrameSize0, Category="Camera0 Settings")) => #18
    #13, #16, #17, #18 -> Disable Bonsai.Vision.VideoWriter
      FileName=C:\Users\sippylab\Desktop\Data\Go_NoGo/MTH/GoTone_Phase_D3/MTH054_GoTone_Phase_D3_2026-02-04T11-04-40/Camera0_pupil_facial_.avi
      Suffix=Timestamp
      Buffered=true
      Overwrite=false
      FourCC=FMP4
      FrameRate=30
      FrameSize(Width=720, Height=540)
      ResizeInterpolation=NearestNeighbor

    ExternalizedMapping(SerialNumber(DisplayName=SerialNumber1, Category="Camera1 Settings"))
    -> Bonsai.Spinnaker.SpinnakerCapture(Index=22038047, SerialNumber=22038047, ColorProcessing=Default) => #21
    -> IncludeWorkflow Timestamp(Path=Extensions\WithLatestTimestamp.bonsai)
    -> MemberSelector(Selector=Timestamp) => #23
    SubscribeSubject Path
    -> Add(Operand=StringProperty(Value=/Timestamp_Camera1_botton.csv))
    -> PropertyMapping(FileName) => #26
    #23, #26 -> Disable Bonsai.IO.CsvWriter
      FileName=C:\Users\sippylab\Desktop\Data\Go_NoGo/MTH/GoTone_Phase_D3/MTH054_GoTone_Phase_D3_2026-02-04T11-04-40/Timestamp_Camera1_botton.csv
      Append=false
      Overwrite=false
      Suffix=None
      IncludeHeader=true
    SubscribeSubject Path
    -> Add(Operand=StringProperty(Value=/Camera1_botton.csv))
    -> PropertyMapping(FileName) => #30
    #21, #30 -> Disable Bonsai.IO.CsvWriter
      FileName=C:\Users\sippylab\Desktop\Data\Go_NoGo/MTH/GoTone_Phase_D3/MTH054_GoTone_Phase_D3_2026-02-04T11-04-40/Camera1_botton.csv
      Append=false
      Overwrite=false
      Suffix=None
      IncludeHeader=true
      Selector="ChunkData.FrameID,ChunkData.Timestamp"
    -> MemberSelector(Selector=Image)
    -> PublishSubject Video1 => #33
    SubscribeSubject Path
    -> Add(Operand=StringProperty(Value=/Camera1_botton_.avi))
    -> PropertyMapping(FileName) => #36
    ExternalizedMapping(FrameRate(DisplayName=VideoFrameRate1, Category="Camera1 Settings")) => #37
    ExternalizedMapping(FrameSize(DisplayName=FrameSize1, Category="Camera1 Settings")) => #38
    #33, #36, #37, #38 -> Disable Bonsai.Vision.VideoWriter
      FileName=C:\Users\sippylab\Desktop\Data\Go_NoGo/MTH/GoTone_Phase_D3/MTH054_GoTone_Phase_D3_2026-02-04T11-04-40/Camera1_botton_.avi
      Suffix=Timestamp
      Buffered=true
      Overwrite=false
      FourCC=FMP4
      FrameRate=30
      FrameSize(Width=360, Height=270)
      ResizeInterpolation=NearestNeighbor

    Timer(DueTime=PT0S) => #40
    ExternalizedMapping(Camera0Frequency(DisplayName=TriggerFrameRate0, Category="Camera0 Settings")) => #41
    #40, #41 -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateCamera0FrequencyPayload(Camera0Frequency=30))
    -> MulticastSubject Commands => #43
    ExternalizedMapping(Camera1Frequency(DisplayName=TriggerFrameRate1, Category="Camera1 Settings")) => #44
    #43, #44 -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateCamera1FrequencyPayload(Camera1Frequency=30))
    -> MulticastSubject Commands
    -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateStartCamerasPayload(StartCameras="CameraOutput0 CameraOutput1"))
    -> MulticastSubject Commands

ExternalizedMapping
  DataPath(Category=".Session Metadata")
  ExperimenterId(Category=".Session Metadata")
  SubjectId(Category=".Session Metadata")
  ExperimentName(Category=".Session Metadata")
-> IncludeWorkflow
  Path=Extensions\SessionMetadata.bonsai
  DataPath=C:\Users\sippylab\Desktop\Data\Go_NoGo
  ExperimenterId=MTH
  SubjectId=MTH064
  ExperimentName=GoTone_Phase_D4

SubscribeSubject Timestamp => #62
SubscribeSubject Touch => #63
#62, #63 -> CombineLatest => #64
SubscribeSubject Path
-> Add(Operand=StringProperty(Value=/LickTrace.csv))
-> PropertyMapping(FileName) => #67
#64, #67 -> Bonsai.IO.CsvWriter
  FileName=C:\Users\sippylab\Desktop\Data\Go_NoGo/MTH/GoTone_Phase_D4/MTH064_GoTone_Phase_D4_2026-02-05T16-03-51/LickTrace.csv
  Append=false
  Overwrite=false
  Suffix=None
  IncludeHeader=false

Disable Bonsai.Video.VideoCaptureDevice
  Index=0
  Format(FrameSize(Width=800, Height=600), AverageFrameRate=60, MaximumFrameRate=60, BitCount=24)
  CaptureProperties(CameraProperty(Property=Exposure, Value=-5, ControlFlags=Auto), CameraProperty(Property=Focus, Value=0, ControlFlags=Auto))
-> Disable PublishSubject Video => #70
Disable SubscribeSubject SessionMetadata
-> Disable Format(Format={0}\{1}_{2}_{3:yyyy-MM-ddTHH-mm-ss}.avi, Selector="Path,Metadata.Value.SubjectId,Metadata.Value.ExperimentName,Metadata.Timestamp")
-> Disable PropertyMapping(FileName) => #73
#70, #73 -> Disable Bonsai.Vision.VideoWriter
  FileName: C:\Users\sippylab\Desktop\Data\Go_NoGo/Shriya/AudLickTask_Day08/SP067_AudLickTask_Day08_2026-01-22T13-10-56\SP067_AudLickTask_Day08_2026-01-22T13-10-56.avi
  Suffix=None
  Buffered=true
  Overwrite=false
  FourCC=FMP4
  FrameRate=30
  FrameSize(Width=0, Height=0)
  ResizeInterpolation=NearestNeighbor
-> Disable IncludeWorkflow Timestamp(Path=Extensions\WithLatestTimestamp.bonsai) => #75
Disable SubscribeSubject Path
-> Disable Add(Operand=StringProperty(Value=/VideoTimestamps.csv))
-> Disable PropertyMapping(FileName) => #78
#75, #78 -> Disable Bonsai.IO.CsvWriter
  FileName=C:\Users\sippylab\Desktop\Data\Go_NoGo/Shriya/AudLickTask_Day08/SP067_AudLickTask_Day08_2026-01-22T13-10-56/VideoTimestamps.csv
  Append=false
  Overwrite=false
  Suffix=None
  IncludeHeader=false

SubscribeSubject StartTrigger
-> IncludeWorkflow(Path=Extensions\LogState.bonsai, Id=Blink)

Annotation "Disables loading of schema"(Text="")
-> Disable ReadAllText(Path=2p_GoTone_modifiedLickTask.yml)
-> Disable ModifiedGoNoGoTask.DeserializeFromYaml(Type=TypeMapping<ModifiedGoNoGoTask.ModifiedGoNoGoTask>)
-> Disable BehaviorSubject TaskParameters

Annotation "Saves metadata"(Text="")
-> SubscribeSubject TaskParameters
-> ModifiedGoNoGoTask.SerializeToYaml => #88
SubscribeSubject Path
-> Add(Operand=StringProperty(Value=/TaskParameters.yml))
-> PropertyMapping(Path) => #91
#88, #91 -> WriteAllText(Path=C:\Users\sippylab\Desktop\Data\Go_NoGo/MTH/GoTone_Phase_D4/MTH064_GoTone_Phase_D4_2026-02-05T16-03-51/TaskParameters.yml)

Bonsai.Numerics.CreateRandom(Seed=nil)
-> AsyncSubject Random

SubscribeSubject TrialStatistics
-> VisualizerMapping => #96
GroupWorkflow ResponseStatistics
    SubscribeSubject ResponseStatistics
    -> Disable GroupWorkflow SlidingBuffer
        WorkflowInput Source1 => #0
        ExternalizedMapping(Count) => #1
        #0, #1 -> BufferCount(Count=20, Skip=1) => #2
        #0, #1 -> Take(Count=20)
        -> IncrementalBuffer => #4
        #2, #4 -> Merge
        -> WorkflowOutput
    -> ResponseStatistics
    -> WorkflowOutput
-> VisualizerMapping(VisualizerType=TypeMapping<ResponseVisualizer>) => #98
GroupWorkflow JoystickVisualizer
    SubscribeSubject Joystick
    -> GroupWorkflow Downsampling
        WorkflowInput Source1 => #0
        ExternalizedMapping(Factor) => #1
        #0, #1 -> GroupWorkflow Buffer => #2
            WorkflowInput Source1 => #0
            ExternalizedMapping(Count(DisplayName=Factor, Description="The integral factor by which to divide the sampling rate of the input signal.")) => #1
            #0, #1 -> Bonsai.Dsp.Buffer(Count=20, Skip=nil)
            -> WorkflowOutput
        #1 -> GroupWorkflow KernelLength
            ExternalizedMapping(Value(DisplayName=Factor, Description="The integral factor by which to divide the sampling rate of the input signal."))
            -> PropertySource<Bonsai.Dsp.Decimate,System.Int32>(MemberName=KernelLength, Value=20)
            -> Divide(Operand=IntProperty(Value=2))
            -> WorkflowOutput
        -> PropertyMapping(KernelLength) => #4
        #2, #1, #4 -> Bonsai.Dsp.Decimate(Downsampling=LowPass, BufferLength=1, Factor=20, SampleRate=1000, KernelLength=10)
        -> Index(Operand=IntProperty(Value=0))
        -> MemberSelector(Selector=Val0)
        -> WorkflowOutput
    -> GroupWorkflow WithTrialTimestamp
        WorkflowInput Source1 => #0
        ExternalizedMapping(Name)
        -> SubscribeSubject Timestamp => #2
        -> Take(Count=1) => #3
        #2, #3 -> CombineLatest
        -> Subtract => #5
        #0, #5 -> WithLatestFrom => #6
        SubscribeSubject JoystickThreshold => #7
        SubscribeSubject ITIUpper => #8
        SubscribeSubject ITILower => #9
        DoubleProperty(Value=0)
        -> First => #11
        SubscribeSubject ToneTick => #12
        SubscribeSubject JoystickThreshold
        -> PropertyMapping(Value) => #14
        #12, #14 -> DoubleProperty(Value=0.30000001192092896)
        -> First => #16
        #11, #16 -> Concat
        -> Repeat => #18
        #6, #7, #8, #9, #18 -> CombineLatest
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression:
            new(
            Item1.Item2 as Timestamp,
            Item1.Item1 as Value,
            Item2 as Threshold,
            Item3 as ITIUpper,
            Item4 as ITILower,
            Item5 as NoGoToneTick)
        -> WorkflowOutput

        SubscribeSubject AllToneTick
        -> PublishSubject ToneTick
    -> Bonsai.Design.Visualizers.RollingGraphBuilder(IndexSelector=Timestamp, ValueSelector="Value,Threshold,ITIUpper,ITILower,NoGoToneTick", SymbolType=None, LineWidth=1, Capacity=1000, Min=nil, Max=nil)
    -> WorkflowOutput
-> VisualizerMapping => #100
SubscribeSubject Video0
-> VisualizerMapping => #102
SubscribeSubject Video1
-> VisualizerMapping => #104
#96, #98, #100, #102, #104 -> Bonsai.Design.Visualizers.TableLayoutPanelBuilder(ColumnCount=3, RowCount=2, ColumnStyles="", RowStyles="", CellSpans="")
